CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160503183100
GitHash:ac0529e
ModuleCount:20
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Study>.*)_(?P<Sample>.*)_(?P<Stain>.*)_(?P<Mag>.*).jpg
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file doesnot contain "Prob")
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    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:^(?P<Study>.*)_(?P<Sample>.*)_(?P<Stain>.*)_(?P<Mag>.*)_Probabilities_(?P<tiff_slice>.*).tiff
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does contain "Prob")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Nuclei': u'Stain', u'Tissue': u'Stain', u'Original': u'Stain', u'Background': u'Stain', u'DAB': u'Stain'}, {u'Nuclei': u'Sample', u'Tissue': u'Sample', u'DAB': u'Sample', u'Background': u'Sample', u'Original': u'Sample'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Select the rule criteria:and (file doesnot contain "Prob")
    Name to assign these images:Original
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ies_0")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does containregexp "ies_2")
    Name to assign these images:Tissue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ies_1")
    Name to assign these images:DAB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ies_3")
    Name to assign these images:Background
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Ignore the image masks?:No
    Name the output image:WholeTissue
    Image or measurement?:Image
    Select the first image:Background
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:WholeTissue
    Name the primary objects to be identified:WholeTissue
    Typical diameter of objects, in pixel units (Min,Max):5,5000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MaskImage:[module_num:7|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
    Select the input image:Tissue
    Name the output image:MaskTissue
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeTissue
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:MaskTissue
    Name the primary objects to be identified:Tissue
    Typical diameter of objects, in pixel units (Min,Max):5,5000
    Discard objects outside the diameter range?:No
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MaskImage:[module_num:9|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
    Select the input image:Nuclei
    Name the output image:MaskNuclei
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeTissue
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    Invert the mask?:No

MaskImage:[module_num:10|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
    Select the input image:MaskNuclei
    Name the output image:MaskNuclei2
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:MaskNuclei2
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):5,45
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
MaskImage:[module_num:12|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
    Select the input image:DAB
    Name the output image:MaskDAB
    Use objects or an image as a mask?:Objects
    Select object for mask:WholeTissue
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    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:MaskDAB
    Name the output image:MaskDAB2
    Use objects or an image as a mask?:Objects
    Select object for mask:Tissue
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    Invert the mask?:Yes

MaskImage:[module_num:14|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
    Select the input image:MaskDAB2
    Name the output image:MaskDAB3
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:Yes

IdentifyPrimaryObjects:[module_num:15|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
    Select the input image:MaskDAB3
    Name the primary objects to be identified:DABObj
    Typical diameter of objects, in pixel units (Min,Max):3,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:8
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    Speed up by using lower-resolution image to find local maxima?:Yes
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    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:No
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:2
    Threshold strategy:Automatic
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Original
    Name the output image:OrigOverlay
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:DABObj
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:Nuclei

MeasureImageAreaOccupied:[module_num:17|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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:DABObj
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:Nuclei
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:WholeTissue
    Retain a binary image of the object regions?:No
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
MeasureObjectSizeShape:[module_num:18|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
    Select objects to measure:DABObj
    Select objects to measure:Nuclei
    Calculate the Zernike features?:Yes

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
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    Select method for constructing file names:From image filename
    Select image name for file prefix:Original
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Outlines
    Saved file format:jpg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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